experiment_profile_name: Turbidostat with growing temperature profile

metadata:
  description:  This experiment profile is a combination of a PID turbidostat and a temperature profile. The temperature is increased every 2 hours from 30°C to 36°C. The turbidostat is set to maintain the OD at 5.0.
  author: Eliel DZIK
  
common:
  jobs:
    stirring:
      actions:
        - type: start
          hours_elapsed: 0.0
          options:
            target_rpm: 400.0
        - type: stop
          hours_elapsed: 12.0
    temperature_control:
      actions:
            - type: start
              hours_elapsed: 0.0
              options:
                automation_name: thermostat
                target_temperature: 30.
    temperature_automation:      
      actions:
              - type: update
                hours_elapsed: 2.0
                options:
                  target_temperature: 32.
              - type: update
                hours_elapsed: 4.0
                options:
                  target_temperature: 33.
              - type: update
                hours_elapsed: 6.0
                options:
                  target_temperature: 34.
              - type: update
                hours_elapsed: 8.0
                options:
                  target_temperature: 35.
              - type: update
                hours_elapsed: 10.0
                options:
                  target_temperature: 36.
    dosing_control:
        actions:
          - type: start
            hours_elapsed: 0.0
            options: 
              automation_name: pid_turbidostat
              target_normalized_od: 5.0
              target_od: null
              duration: 1.0
          - type: stop
            hours_elapsed: 12.0

